/gamos/random/setSeeds 1000 1000
/gamos/verbosity GmBaseVerbosity 4
/gamos/verbosity GmGeomVerbosity 4

/gamos/setParam GmAnalysisMgr:FileNameSuffix test
/gamos/setParam GmGeometryFromText:FileName world.geom
/gamos/geometry GmGeometryFromText

/gamos/physicsList GmEMPhysics

/gamos/generator GmGenerator
/run/initialize
/gamos/generator/addSingleParticleSource MySource opticalphoton 600*wvnm
/gamos/generator/positionDist MySource GmGenerDistPositionPoint 0.*mm 0.*mm 0.1*mm
/gamos/generator/directionDist MySource GmGenerDistDirectionConst 0. 0. -1.

/gamos/physics/addPhysics tissue-optics

/gamos/filter f1 GmEnterLogicalVolumeFilter reflectance
/gamos/userAction GmStepDataTextFileUA f1
/gamos/setParam GmStepDataTextFileUA_f1:DataList FinalDirX FinalDirY FinalDirZ
/gamos/setParam GmStepDataTextFileUA_f1:FileName reflectance.txt

/gamos/filter f2 GmEnterLogicalVolumeFilter transmission
/gamos/filter f3 GmNumericDataFilter FinalDirZ -1 -1
/gamos/filter f4 GmInverseFilter f3
/gamos/filter f5 GmANDFilter f2 f4
/gamos/userAction GmStepDataTextFileUA f5
/gamos/setParam GmStepDataTextFileUA_f5:DataList FinalDirX FinalDirY FinalDirZ
/gamos/setParam GmStepDataTextFileUA_f5:FileName transmission.txt

/gamos/userAction GmCountProcessesUA
/gamos/userAction GmCountTracksUA
/gamos/setParam GmCountTracksUA:EachNEvent 10000

/run/beamOn 1000000

