/gamos/random/setSeeds 1000 1000
#/gamos/verbosity GmScoringVerbosity 4
/gamos/setParam GmAnalysisMgr:FileNameSuffix _test1
/gamos/setParam GmGeometryFromText:FileName world.geom
/gamos/geometry GmGeometryFromText

/gamos/physicsList GmEMPhysics

/gamos/generator GmGenerator
/run/initialize
/gamos/generator/addSingleParticleSource MySource opticalphoton 600*wvnm
/gamos/generator/positionDist MySource GmGenerDistPositionPoint 0.*mm 0.*mm 5.*mm
/gamos/generator/directionDist MySource GmGenerDistDirectionConst 0. 0. -1.

/gamos/physics/addPhysics tissue-optics

/gamos/filter c1 GmPrimaryFilter
/gamos/scoring/createMFDetector detector voxel
/gamos/scoring/addScorer2MFD source_fluence_scorer GmPSTrackLengthFluence detector
/gamos/scoring/addFilter2Scorer c1 source_fluence_scorer
/gamos/setParam source_fluence_printer:PrintHeader FALSE
/gamos/scoring/printer source_fluence_printer GmPSPrinterCSVFile
/gamos/scoring/addPrinter2Scorer source_fluence_printer source_fluence_scorer
/gamos/setParam source_fluence_printer.csv:FileName fluence.csv
/gamos/scoring/scoreErrors source_fluence_scorer FALSE

/gamos/userAction GmCountProcessesUA
/gamos/userAction GmCountTracksUA
/gamos/setParam GmCountTracksUA:EachNEvent 10000

/run/beamOn 10000

